Select_Active_File
/FILE_NAME=ALL_FILES
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;

Assign_Model_File
/CALIBRATION_FILE=*static*
/MOTION_FILE_NAMES=*
! /REMOVE_EXISTING_ASSIGNMENTS=FALSE
;

! THIS ASSIGNS THE SPECIFC MODEL TO THE FILES> IF YOU HAVE MULTIPLE
!STATIC FILES YOU CAN ADD THEM MANUAILY OR WRITE MORE CODE

Assign_Tags_To_Files
/MOTION_FILE_NAMES=*
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/TAGS=Active
;

Select_Active_File
/FILE_NAME=ALL_FILES
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;

Modify_One_Force_Platform
/FP_SELECTED=1
/FP_TYPE=2
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/FP_ORIGIN=-250+-0+-0.001
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/FP_CORNER1=0+850+0
/FP_CORNER2=500.+850.+0
/FP_CORNER3=500.+-850.+0
/FP_CORNER4=0+-850+0
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/UPDATE_C3D_FILE=TRUE
! /MODIFY_CAL_FILE=FALSE
;

Modify_One_Force_Platform
/FP_SELECTED=2
/FP_TYPE=2
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/FP_ORIGIN=250+-0+-0.001
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/FP_CORNER1=-500+850+0
/FP_CORNER2=0+850+0
/FP_CORNER3=0+-850+0
/FP_CORNER4=-500+-850+0
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/UPDATE_C3D_FILE=TRUE
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;

Set_Force_Platform_Threshold
/THRESHOLD=10
/SET_AS_DEFAULT=TRUE
;

Lowpass_Filter
/SIGNAL_TYPES=TARGET
! /SIGNAL_FOLDER=ORIGINAL
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! /RESULT_FOLDER=PROCESSED
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! /FILTER_CLASS=BUTTERWORTH
/FREQUENCY_CUTOFF=8
/NUM_REFLECTED=10
! /NUM_EXTRAPOLATED=0
/TOTAL_BUFFER_SIZE=10
! /NUM_BIDIRECTIONAL_PASSES=1
;

Lowpass_Filter
/SIGNAL_TYPES=ANALOG
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/FREQUENCY_CUTOFF=10.0
/NUM_REFLECTED=100
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! /TOTAL_BUFFER_SIZE=6
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;

Multiply_Signals_By_Constant
/SIGNAL_TYPES=ANALOG
/SIGNAL_FOLDER=ORIGINAL
/SIGNAL_NAMES=Sensor 1.IM EMG1+Sensor 2.IM EMG2+Sensor 3.IM EMG3+Sensor 4.IM EMG4+Sensor 5.IM EMG5+Sensor 6.IM EMG6
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/RESULT_FOLDERS=PROCESSED
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/CONSTANT=100000000000
;

Highpass_Filter
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Sensor 1.IM EMG1+Sensor 2.IM EMG2+Sensor 3.IM EMG3+Sensor 4.IM EMG4+Sensor 5.IM EMG5+Sensor 6.IM EMG6
/RESULT_FOLDER=PROCESSED
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/FREQUENCY_CUTOFF=50
/NUM_REFLECTED=0
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/TOTAL_BUFFER_SIZE=100
/NUM_BIDIRECTIONAL_PASSES=1
;

Lowpass_Filter
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Sensor 1.IM EMG1+Sensor 2.IM EMG2+Sensor 3.IM EMG3+Sensor 4.IM EMG4+Sensor 5.IM EMG5+Sensor 6.IM EMG6
/RESULT_FOLDER=PROCESSED
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/FREQUENCY_CUTOFF=400
/NUM_REFLECTED=0
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/TOTAL_BUFFER_SIZE=100
/NUM_BIDIRECTIONAL_PASSES=1
;

Rectify
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Sensor 1.IM EMG1+Sensor 2.IM EMG2+Sensor 3.IM EMG3+Sensor 4.IM EMG4+Sensor 5.IM EMG5+Sensor 6.IM EMG6
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/RESULT_FOLDERS=PROCESSED
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;

Moving_RMS
/SIGNAL_TYPES=DERIVED
/SIGNAL_FOLDER=PROCESSED
/SIGNAL_NAMES=Sensor 1.IM EMG1+Sensor 2.IM EMG2+Sensor 3.IM EMG3+Sensor 4.IM EMG4+Sensor 5.IM EMG5+Sensor 6.IM EMG6
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! /RESULT_FOLDERS=PROCESSED
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/NUM_WINDOW_FRAMES=(0.1*PARAMETER::ANALOG::RATE)+1
! /IF_EVEN_FRAMES_INCREMENT_1=FALSE
;

! USE PROCESSED SIGNALS = TRUE
Set_Use_Processed_Analog
/USE_PROCESSED=TRUE
;

Set_Use_Processed_Targets
/USE_PROCESSED=TRUE
;

