Select_Active_File
/FILE_NAME=ALL_FILES
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;

Export_Data_To_Matfile
/SIGNAL_TYPES=LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+LINK_MODEL_BASED+FORCE+FORCE+DERIVED+DERIVED+METRIC+METRIC+METRIC+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+DERIVED+EVENT_LABEL+EVENT_LABEL+LINK_MODEL_BASED+LINK_MODEL_BASED
/SIGNAL_FOLDER=ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL+PROCESSED+PROCESSED+PROCESSED+PROCESSED+TREADMILL_SPEED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+PROCESSED+ORIGINAL+ORIGINAL+ORIGINAL+ORIGINAL
/SIGNAL_NAMES=RAnkle_Angle+RAnkle_Moment+RAnkle_Power+RAnkle_Angle_Velocity+RHip_Angle+RHip_Moment+RHip_Power+RHip_Angle_Velocity+RKnee_Angle+RKnee_Moment+RKnee_Power+RKnee_Angle_Velocity+LAnkle_Angle+LAnkle_Moment+LAnkle_Power+LAnkle_Angle_Velocity+LHip_Angle+LHip_Moment+LHip_Power+LHip_Angle_Velocity+LKnee_Angle+LKnee_Moment+LKnee_Power+LKnee_Angle_Velocity+FP1+FP2+LEFT_CONDITION+RIGHT_CONDITION+MASS+HEIGHT+TREADMILL_SPEED+Sensor 1.IM EMG1+Sensor 2.IM EMG2+Sensor 3.IM EMG3+Sensor 4.IM EMG4+Sensor 5.IM EMG5+Sensor 6.IM EMG6+RHS+LHS+LFoot+RFoot
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/MATLAB_NAMES=RAnkle_Angle+RAnkle_Moment+RAnkle_Power+RAnkle_Angle_Velocity+RHip_Angle+RHip_Moment+RHip_Power+RHip_Angle_Velocity+RKnee_Angle+RKnee_Moment+RKnee_Power+RKnee_Angle_Velocity+LAnkle_Angle+LAnkle_Moment+LAnkle_Power+LAnkle_Angle_Velocity+LHip_Angle+LHip_Moment+LHip_Power+LHip_Angle_Velocity+LKnee_Angle+LKnee_Moment+LKnee_Power+LKnee_Angle_Velocity+LForce+RForce+LEFT_CONDITION+RIGHT_CONDITION+MASS+HEIGHT+TREADMILL_SPEED+REMG1+REMG2+REMG3+REMG4+REMG5+REMG6+RHS+LHS+LFoot+RFoot
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/USE_NAN_FOR_DATANOTFOUND=TRUE
;

